PsychoPy2experiment version="2026.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = chronos_aux_rt_demo
  keyboardBackend = PsychToolbox
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    CodeComponent chronos_setup
      Code Type = Py
      Before Experiment:
        from chronos import HybridKeyboard
        from psychopy.hardware import keyboard
        keyboard.Keyboard = HybridKeyboard
      End Routine:
        aux = key_resp.get_aux_events()
        onset_hw_us = next(
            (e.hw_timestamp_us for e in aux if e.channel == 'F' and e.is_rising),
            None,
        )

        resp_hw_us = (
            key_resp.response_log[0].hw_timestamp_us
            if key_resp.response_log else None
        )

        thisExp.addData('onset_hw_us', onset_hw_us)
        thisExp.addData('resp_hw_us', resp_hw_us)

        if onset_hw_us is not None and resp_hw_us is not None:
            hw_rt_us = (resp_hw_us - onset_hw_us) % (2 ** 32)
            thisExp.addData('hw_rt_us', hw_rt_us)
            thisExp.addData('hw_rt_ms', hw_rt_us / 1000)
    ParallelOutComponent trigger
      address = 0x4FF8
      register = EIO
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = True
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    TextComponent stimulus
      languageStyle = ltr
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
      units = height
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4','5','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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Flow
  Routine trial
