PsychoPy2experiment version="2026.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = chronos_builder_demo
  keyboardBackend = PsychToolbox
  logging level = warning
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Routines
  Routine trial
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    CodeComponent chronos_patch
      Code Type = Py
      Before Experiment:
        from chronos import HybridKeyboard
        from psychopy.hardware import keyboard
        keyboard.Keyboard = HybridKeyboard
      End Routine:
        if key_resp.response_log:
            thisExp.addData(
                'chronos_hw_us',
                [getattr(k, 'hw_timestamp_us', '') for k in key_resp.response_log],
            )
            thisExp.addData(
                'chronos_pc_time_s',
                [getattr(k, 'tDown', '') for k in key_resp.response_log],
            )
    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4','5','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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Flow
  Routine trial
